CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<week>.*)_(?P<genotype>.*)_(?P<number>.*).czi.png_color_image.png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:stomata
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:genotype

Resize:[module_num:5|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
    Select the input image:stomata
    Name the output image:Resize
    Resizing method:Resize by specifying desired final dimensions
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    Width (x) of the final image:512
    Height (y) of the final image:512
    # of planes (z) in the final image:1
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

ColorToGray:[module_num:6|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
    Select the input image:Resize
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:SC
    Convert green to gray?:Yes
    Name the output image:GC
    Convert blue to gray?:No
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
ConvertImageToObjects:[module_num:7|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
    Select the input image:SC
    Name the output object:sco
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:8|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
    Select the input image:GC
    Name the output object:gco
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:gco, sco
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:gco
    Select neighboring objects to measure:sco
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:No
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
SplitOrMergeObjects:[module_num:11|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
    Select the input objects:sco
    Name the new objects:sco2
    Operation:Merge
    Maximum distance within which to merge objects:1
    Merge using a grayscale image?:No
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    Merging method:Distance
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
TrackObjects:[module_num:12|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
    Choose a tracking method:Follow Neighbors
    Select the objects to track:gco
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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    Average cell diameter in pixels:35.0
    Use advanced configuration parameters:No
    Cost of cell to empty matching:15.0
    Weight of area difference in function matching cost:25.0

TrackObjects:[module_num:13|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
    Choose a tracking method:Overlap
    Select the objects to track:sco
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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
SplitOrMergeObjects:[module_num:14|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
    Select the input objects:gco
    Name the new objects:gco2
    Operation:Merge
    Maximum distance within which to merge objects:2
    Merge using a grayscale image?:No
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    Merging method:Distance
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
CombineObjects:[module_num:15|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
    Select initial object set:gco2
    Select object set to combine:sco2
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

SplitOrMergeObjects:[module_num:16|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
    Select the input objects:CombinedObjects
    Name the new objects:Relabeled_SC_GC
    Operation:Merge
    Maximum distance within which to merge objects:2
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:Relabeled_SC_GC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:19|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
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    Auto-scale thumbnail pixel intensities?:Yes
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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